<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="Tutorial7_SodiumChannelModel">
  <units name="mV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="ms">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="mS_per_cm2">
    <unit prefix="milli" units="siemens"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="microA_per_cm2">
    <unit prefix="micro" units="ampere"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="mM">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="per_mV_ms">
    <unit exponent="-1" prefix="milli" units="second"/>
    <unit exponent="-1" prefix="milli" units="volt"/>
  </units>
  <units name="per_ms">
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <component name="sodiumChannel">
    <variable name="V" units="mV" interface="public_and_private"/>
    <variable name="t" units="ms" interface="public_and_private"/>
    <variable name="h" units="dimensionless" interface="private"/>
    <variable name="m" units="dimensionless" interface="private"/>
    <variable name="g_Na" units="mS_per_cm2" initial_value="120"/>
    <variable name="E_Na" units="mV"/>
    <variable name="i_Na" units="microA_per_cm2"/>
    <variable name="Nao" units="mM" initial_value="140"/>
    <variable name="Nai" units="mM" initial_value="30"/>
    <variable name="RTF" units="mV" initial_value="25"/>
    <variable name="Na_conductance" units="mS_per_cm2"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#"><apply>                <eq/>                <ci>E_Na</ci>                <apply>                    <times/>                    <ci>RTF</ci>                    <apply>                        <log/>                        <apply>                            <divide/>                            <ci>Nao</ci>                            <ci>Nai</ci>                        </apply>                    </apply>                </apply>            </apply><apply>                <eq/>                <ci>Na_conductance</ci>                <apply>                    <times/>                    <apply>                        <power/>                        <ci>m</ci>                        <apply>                            <times/>                            <cn cellml:units="dimensionless">3</cn>                            <ci>h</ci>                        </apply>                    </apply>                </apply>            </apply><apply>                <eq/>                <ci>i_Na</ci>                <apply>                    <times/>                    <ci>Na_conductance</ci>                    <apply>                        <minus/>                        <ci>V</ci>                        <ci>E_Na</ci>                    </apply>                </apply>            </apply></math>
  </component>
  <component name="mGate">
    <variable name="V" units="mV" interface="public"/>
    <variable name="t" units="ms" interface="public"/>
    <variable name="alpha_m" units="per_ms"/>
    <variable name="beta_m" units="per_ms"/>
    <variable name="m" units="dimensionless" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#"><apply>                <eq/>                <ci>alpha_m</ci>                <apply>                    <divide/>                    <apply>                        <times/>                        <cn cellml:units="per_mV_ms">0.1</cn>                        <apply>                            <plus/>                            <ci>V</ci>                            <cn cellml:units="mV">25</cn>                        </apply>                    </apply>                    <apply>                        <minus/>                        <apply>                            <exp/>                            <apply>                                <divide/>                                <apply>                                    <plus/>                                    <ci>V</ci>                                    <cn cellml:units="mV">25</cn>                                </apply>                                <cn cellml:units="mV">10</cn>                            </apply>                        </apply>                        <cn cellml:units="dimensionless">1</cn>                    </apply>                </apply>            </apply></math>
  </component>
  <component name="hGate">
    <variable name="V" units="mV" interface="public"/>
    <variable name="t" units="ms" interface="public"/>
    <variable name="alpha_h" units="per_ms"/>
    <variable name="beta_h" units="per_ms"/>
    <variable name="h" units="dimensionless" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#"><apply><eq/>                <ci>alpha_h</ci>                <apply><times/>                    <cn cellml:units="per_ms">0.07</cn>                    <apply><exp/>                        <apply><divide/>                            <ci>V</ci>                            <cn cellml:units="mV">20</cn>                        </apply>                    </apply>                </apply>            </apply><apply><eq/>                <ci>beta_h</ci>                <apply><divide/>                    <cn cellml:units="per_ms">1</cn>                    <apply><exp/>                        <apply><divide/>                            <apply><plus/>                                <ci>V</ci>                                <cn cellml:units="mV">30</cn>                            </apply>                            <cn cellml:units="mV">10</cn>                        </apply>                    </apply>                </apply>            </apply><apply><eq/>                <apply><diff/>                    <bvar>                        <ci>t</ci>                    </bvar>                    <ci>h</ci>                </apply>                <apply><minus/>                    <apply><times/>                        <ci>alpha_h</ci>                        <apply><minus/>                            <cn cellml:units="dimensionless">1</cn>                            <ci>h</ci>                        </apply>                    </apply>                    <apply><times/>                        <ci>h</ci>                        <ci>beta_h</ci>                    </apply>                </apply>            </apply></math>
  </component>
  <component name="environment">
    <variable name="V" units="mV" interface="public"/>
    <variable name="t" units="ms" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#"><apply>                <eq/>                <ci>V</ci>                <piecewise>                    <piece>                        <cn cellml:units="mV">-85</cn>                        <apply><lt/><ci>t</ci><cn cellml:units="ms">5</cn></apply>                    </piece>                        <piece>                        <cn cellml:units="mV">-85</cn>                        <apply><gt/><ci>t</ci><cn cellml:units="ms">15</cn></apply>                    </piece>                    <otherwise>                        <cn cellml:units="mV">-20</cn>                    </otherwise>                </piecewise>            </apply></math>
  </component>
  <connection component_1="sodiumChannel" component_2="environment">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
  </connection>
  <connection component_1="sodiumChannel" component_2="mGate">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
    <map_variables variable_1="m" variable_2="m"/>
  </connection>
  <connection component_1="sodiumChannel" component_2="hGate">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
    <map_variables variable_1="h" variable_2="h"/>
  </connection>
  <encapsulation>
    <component_ref component="sodiumChannel">
      <component_ref component="mGate"/>
      <component_ref component="hGate"/>
    </component_ref>
  </encapsulation>
</model>
